PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = black
  expName = fluency
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Routines
  Routine instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press space key to start
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $letter
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  Routine end
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Finished!
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = SWG_training1.xlsx
    loopType = sequential
    nReps = 24
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    conditions:
      [OrderedDict([('letter', 'H')]),
      OrderedDict([('letter', 'K')]),
      OrderedDict([('letter', 'ⴉ')]),
      OrderedDict([('letter', 'ꚏ')]),
      OrderedDict([('letter', 'G')]),
      OrderedDict([('letter', 'P')])]
    Routine trial
  LoopTerminator trials
  Routine end
