PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1680, 1050]
  color = $[-1,-1,-1]
  expName = SC_experiment
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Routines
  Routine SC_task
    TextComponent text_SC_task
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = $SC_Stimuli
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  Routine instruction
    TextComponent text_Instruction
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Satzergänzungsaufgabe:

        Im Folgenden sehen Sie verschiedene Sätze, bei denen jeweils das letzte Wort fehlt. Bitte ergänzen Sie IM STILLEN das fehlende Wort. Denken Sie anschließend über weitere Ergänzungsmöglichkeiten nach, bis der nächste Satz auf dem Bildschirm erscheint.

        Teilweise sehen Sie auch Nonsense-Sätze, die aus bloßen Aneinanderreihungen von Buchstaben bestehen und keinen Sinn ergeben. Hier müssen Sie keine Wörter ergänzen. Warten Sie in diesen Fällen einfach ab, bis der nächste sinnvolle Satz erscheint.

        Drücken Sie eine beliebige Taste, sobald Sie bereit sind, um die Aufgabe zu starten.
    KeyboardComponent key_resp_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_end
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Geschafft!
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Flow
  Routine instruction
  LoopInitiator trials_stimuli loopType="TrialHandler"
    conditionsFile = SC_training1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('SC_Stimuli', 'Nach dem Theaterstück ernteten sie viel _____.')]),
      OrderedDict([('SC_Stimuli', 'Das einsame Küken sucht seine _____.')]),
      OrderedDict([('SC_Stimuli', 'Schimpansen sind eine Gattung von _____.')]),
      OrderedDict([('SC_Stimuli', 'Das Kätzchen kletterte auf einen _____.')]),
      OrderedDict([('SC_Stimuli', 'L vhpgjhll chkg bhp nlng _____.')]),
      OrderedDict([('SC_Stimuli', 'Ibg knnkpyxg kg snpsrg lp _____.')]),
      OrderedDict([('SC_Stimuli', 'Kbglg sp sk pzbdkl kn Pmxqrrhc kr _____.')]),
      OrderedDict([('SC_Stimuli', 'Xk jfmg nqrnlg clq jsd ngr hmr _____.')]),
      OrderedDict([('SC_Stimuli', 'Der Kapitän lenkte geschickt sein _____.')]),
      OrderedDict([('SC_Stimuli', 'Zu viele Süßigkeiten machen _____.')]),
      OrderedDict([('SC_Stimuli', 'Die Biertrinker hoben ihre _____.')]),
      OrderedDict([('SC_Stimuli', 'Sie bezieht das Bett mit frischem _____.')])]
    Routine SC_task
  LoopTerminator trials_stimuli
  Routine end
